%YAML 1.1
---
# yaml-language-server: $schema=https://raw.githubusercontent.com/harp-tech/reflex-generator/main/schema/device.json
device: SoundCard
whoAmI: 1280
firmwareVersion: "2.0"
hardwareTargets: "1.1"
registers:
  PlaySoundOrFrequency:
    address: 32
    type: U16
    access: Write
    description: Starts the sound index (if less than 32) or frequency (if greater or equal than 32)
  Stop:
    address: 33
    type: U8
    access: Write
    description: Any value will stop the current sound
  AttenuationLeft:
    address: 34
    type: U16
    access: Write
    description: Configure left channel's attenuation (1 LSB is 0.1dB)
  AttenuationRight:
    address: 35
    type: U16
    access: Write
    description: Configure right channel's attenuation (1 LSB is 0.1dB)
  AttenuationBoth:
    address: 36
    type: U16
    access: Write
    length: 2
    description: Configures both attenuation on right and left channels [Att R] [Att L]
  AttenuationAndPlaySoundOrFreq:
    address: 37
    type: U16
    access: Write
    length: 3
    description: Configures attenuation and plays sound index [Att R] [Att L] [Index]
  Reserved0: &reserved
    address: 38
    type: U8
    access: Read
    description: Reserved for future use
    visibility: private
  Reserved1:
    <<: *reserved
    address: 39
  DigitalInputs:
    address: 40
    type: U8
    access: Event
    description: State of the digital inputs
  ConfigureDI0:
    address: 41
    type: U8
    access: Write
    description: Configuration of the digital input 0 (DI0)
  ConfigureDI1:
    address: 42
    type: U8
    access: Write
    description: Configuration of the digital input 1 (DI1)
  ConfigureDI2:
    address: 43
    type: U8
    access: Write
    description: Configuration of the digital input 2 (DI2)
  SoundIndexDI0:
    address: 44
    type: U8
    access: Write
    description: Specifies the sound index to be played when triggering DI0
  SoundIndexDI1:
    address: 45
    type: U8
    access: Write
    description: Specifies the sound index to be played when triggering DI1
  SoundIndexDI2:
    address: 46
    type: U8
    access: Write
    description: Specifies the sound index to be played when triggering DI2
  FrequencyDI0:
    address: 47
    type: U16
    access: Write
    description: Specifies the sound frequency to be played when triggering DI0
  FrequencyDI1:
    address: 48
    type: U16
    access: Write
    description: Specifies the sound frequency to be played when triggering DI1
  FrequencyDI2:
    address: 49
    type: U16
    access: Write
    description: Specifies the sound frequency to be played when triggering DI2
  AttenuationLeftDI0:
    address: 50
    type: U16
    access: Write
    description: Left channel's attenuation (1 LSB is 0.5dB) when triggering DI0
  AttenuationLeftDI1:
    address: 51
    type: U16
    access: Write
    description: Left channel's attenuation (1 LSB is 0.5dB) when triggering DI1
  AttenuationLeftDI2:
    address: 52
    type: U16
    access: Write
    description: Left channel's attenuation (1 LSB is 0.5dB) when triggering DI2
  AttenuationRightDI0:
    address: 53
    type: U16
    access: Write
    description: Right channel's attenuation (1 LSB is 0.5dB) when triggering DI0
  AttenuationRightDI1:
    address: 54
    type: U16
    access: Write
    description: Right channel's attenuation (1 LSB is 0.5dB) when triggering DI1
  AttenuationRightDI2:
    address: 55
    type: U16
    access: Write
    description: Right channel's attenuation (1 LSB is 0.5dB) when triggering DI2
  AttenuationAndSoundIndexDI0:
    address: 56
    type: U16
    access: Write
    length: 3
    description: Sound index and attenuation to be played when triggering DI0 [Att R] [Att L] [Index]
  AttenuationAndSoundIndexDI1:
    address: 57
    type: U16
    access: Write
    length: 3
    description: Sound index and attenuation to be played when triggering DI1 [Att R] [Att L] [Index]
  AttenuationAndSoundIndexDI2:
    address: 58
    type: U16
    access: Write
    length: 3
    description: Sound index and attenuation to be played when triggering DI2 [Att R] [Att L] [Index]
  AttenuationAndFrequencyDI0:
    address: 59
    type: U16
    access: Write
    length: 2
    description: Sound index and attenuation to be played when triggering DI0 [Att BOTH] [Frequency]
  AttenuationAndFrequencyDI1:
    address: 60
    type: U16
    access: Write
    length: 2
    description: Sound index and attenuation to be played when triggering DI1 [Att BOTH] [Frequency]
  AttenuationAndFrequencyDI2:
    address: 61
    type: U16
    access: Write
    length: 2
    description: Sound index and attenuation to be played when triggering DI2 [Att BOTH] [Frequency]
  Reserved2:
    <<: *reserved
    address: 62
  Reserved3:
    <<: *reserved
    address: 63
  Reserved4:
    <<: *reserved
    address: 64
  ConfigureDO0:
    address: 65
    type: U8
    access: Write
    description: Configuration of the digital output 0 (DO0)
  ConfigureDO1:
    address: 66
    type: U8
    access: Write
    description: Configuration of the digital output 1 (DO1)
  ConfigureDO2:
    address: 67
    type: U8
    access: Write
    description: Configuration of the digital output 2 (DO2
  PulseDO0:
    address: 68
    type: U8
    access: Write
    description: Pulse for the digital output 0 (DO0) [1:255]
  PulseDO1:
    address: 69
    type: U8
    access: Write
    description: Pulse for the digital output 1 (DO1) [1:255]
  PulseDO2:
    address: 70
    type: U8
    access: Write
    description: Pulse for the digital output 2 (DO2) [1:255]
  Reserved5:
    <<: *reserved
    address: 71
  Reserved6:
    <<: *reserved
    address: 72
  Reserved7:
    <<: *reserved
    address: 73
  OutputSet: &output
    address: 74
    type: U8
    access: Write
    description: Set the specified digital output lines
  OutputClear:
    <<: *output
    address: 75
    description: Clear the specified digital output lines
  OutputToggle:
    <<: *output
    address: 76
    description: Toggle the specified digital output lines
  OutputState:
    <<: *output
    address: 77
    description: Write the state of all digital output lines
  Reserved8:
    <<: *reserved
    address: 78
  Reserved9:
    <<: *reserved
    address: 79
  ConfigureAdc:
    address: 80
    type: U8
    access: Write
    description: Configuration of Analog Inputs
  AnalogInputs:
    address: 81
    type: U16
    access: Event
    length: 5
    description: "[ADC0]   [ADC1]   [ATT LEFT]   [ATT RIGHT]   [FREQUENCY]   Values are 0 if not used"
  Commands:
    address: 82
    type: U8
    access: Write
    description: Send commands to PIC32 micro-controller
  Reserved10:
    <<: *reserved
    address: 83
  Reserved11:
    <<: *reserved
    address: 84
  Reserved12:
    <<: *reserved
    address: 85
  EnableEvents:
    address: 86
    type: U8
    access: Write
    description: Enable the Events